<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>StepperDriver Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Motor1QuickPulseDistance</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>1.25</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>131</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Motor1QuickNominalSpeed</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>60</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>133</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Motor1QuickInitialSpeed</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>2</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>135</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Motor1QuickAcceleration</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>2.5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>137</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>Motor1QuickDistance</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>139</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepperDriver Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="1" To="9" Label="Source1" />
      <Edge From="1" To="12" Label="Source1" />
      <Edge From="1" To="15" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="17" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="17" Label="Source2" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="17" Label="Source3" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="17" Label="Source4" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source5" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>